PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1664, 1109]
  expName = Flickering
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Start
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    TextComponent title_start
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text [set every frame]:
        Welcome to training
    TextComponent fixation_cross
      color = red
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every frame] = +
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    TextComponent ready_to_start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text [set every frame]:
        Make sure you are ready to start
  Routine Countdown
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    TextComponent title_countdown
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every frame]:
        Welcome to training
    TextComponent three
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent two
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [time (s)] = 2.0
      text = 2
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    TextComponent one
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [time (s)] = 3.0
      text = 1
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  Routine Collect
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    TextComponent title
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = Right
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    PolygonComponent stimuli
      fillColor = white
      shape = rectangle
      size = (0.9, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    CodeComponent stimuli_code
      Code Type = Py
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      Begin Experiment:
        import sys
        import csv
        import numpy as np
        from datetime import datetime
        from pathlib import Path
        import time


        src_dir = str(Path(_thisDir).parents[0])
        if src_dir not in sys.path:
            sys.path.insert(0, src_dir)

        no_eeg = '--no-eeg' in sys.argv
        serial_port = 'COM4'
        num_channels = 4

        for arg in sys.argv:
            if arg.startswith('--serial-port='):
                serial_port = arg.split('=')[1]
            if arg.startswith('--num-channels='):
                num_channels = int(arg.split('=')[1])

        stream = None
        if not no_eeg:
            from brainflow.board_shim import BoardIds, BoardShim, BrainFlowInputParams
            from acquisition.brainflow_stream import BrainFlowStream
            BoardShim.disable_board_logger()
            p = BrainFlowInputParams()
            p.serial_port = serial_port
            stream = BrainFlowStream(board_id=BoardIds.NEUROPAWN_KNIGHT_BOARD.value, params=p, num_channels=num_channels)
            stream.prepare_session()
            stream.start_stream()
            time.sleep(2)
            for ch in range(1, 9):
                time.sleep(0.5)
                stream.board.config_board(f"chon_{ch}_12")
                time.sleep(1)
                stream.board.config_board(f"rldadd_{ch}")
                time.sleep(0.5)
            print("Board ready.")

        X_list = []
        y_list = []

        freqLeft = 7.5
        freqRight = 12

        with open('conditions.csv', newline='') as f:
            rows = list(csv.DictReader(f))

        has_both_sides = any(r['side'] == 'LEFT' for r in rows) and any(r['side'] == 'RIGHT' for r in rows)

        for arg in sys.argv:
            if arg.startswith('--freq-left='):
                freqLeft = float(arg.split('=')[1])
            if arg.startswith('--freq-right='):
                freqRight = float(arg.split('=')[1])

        frame_rate = win.getActualFrameRate()
        max_freq = frame_rate / 2

        if freqLeft >= max_freq or freqRight >= max_freq:
            raise ValueError(f"Frequencies must be below {max_freq}Hz (half your frame rate of {frame_rate}Hz)")

        frames_per_half_cycle_left = int(frame_rate / (2 * freqLeft))
        frames_per_half_cycle_right = int(frame_rate / (2 * freqRight))
        frame_count = 0
      Begin Routine:
        frame_count = 0
        if stream is not None:
            stream.board.get_board_data()
      Each Frame:
        total = trials.nTotal
        current = trials.thisN + 1

        if has_both_sides:
            total_display = total // 2
            current_display = (trials.thisN // 2) + 1
        else:
            total_display = total
            current_display = current

        title.text = f"Trial {current_display} / {total_display} - {side}"

        if side == 'LEFT':
            cycle_position = frame_count % (frames_per_half_cycle_left * 2)
            stimuli.opacity = 1 if cycle_position < frames_per_half_cycle_left else 0
        else:
            cycle_position = frame_count % (frames_per_half_cycle_right * 2)
            stimuli.opacity = 1 if cycle_position < frames_per_half_cycle_right else 0

        frame_count += 1
      End Experiment:
        if stream is not None:
            try:
                stream.stop_stream()
            except Exception:
                pass
            stream.release_session()

        if X_list:
            from pathlib import Path
            ts = datetime.now().strftime("%Y%m%d_%H%M%S")
            out_dir = Path(_thisDir).parents[1] / 'data' / 'raw'
            out_dir.mkdir(parents=True, exist_ok=True)
            ml = min(x.shape[1] for x in X_list)
            X = np.stack([x[:, :ml] for x in X_list])
            y = np.array(y_list, dtype=np.int64)
            np.save(out_dir / f"X_{ts}.npy", X)
            np.save(out_dir / f"y_{ts}.npy", y)
            print(f"Saved {X.shape[0]} trials — X={X.shape}")
      End Routine:
        if stream is not None:
            eeg = stream.board.get_board_data()
            eeg_channels = eeg[:num_channels, :]
            label = 0 if side == 'LEFT' else 1
            X_list.append(eeg_channels)
            y_list.append(label)
            print(f"Trial {trials.thisN + 1} {side} — shape: {eeg_channels.shape}")
  Routine Waiting
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    TextComponent waiting_title
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every frame]:
        Waiting...
    CodeComponent waiting_code
      Code Type = Py
      Begin Experiment:
        import csv

        with open('conditions.csv', newline='') as f:
            rows = list(csv.DictReader(f))

        has_both_sides = any(r['side'] == 'LEFT' for r in rows) and any(r['side'] == 'RIGHT' for r in rows)
      Each Frame:
        total = trials.nTotal
        current = trials.thisN + 2

        if has_both_sides:
            total_display = total // 2
            current_display = (trials.thisN // 2) + 1
        else:
            total_display = total
            current_display = current

        waiting_title.text = f"Trial {current_display} / {total_display}"
    TextComponent red_middle
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = +
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  Routine Done
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    TextComponent done_title
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Finished, you can relax now
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Flow
  Routine Start
  Routine Countdown
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('side', 'RIGHT')]),
      OrderedDict([('side', 'RIGHT')])]
    Routine Collect
    Routine Waiting
  LoopTerminator trials
  Routine Done
