PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1664, 1109]
  expName = Flickering
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Test
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    PolygonComponent stimuli1
      anchor = bottom-left
      fillColor = white
      pos = (-0.7, -0.44)
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent stimuli2
      anchor = top-right
      fillColor = white
      pos = (0.7, 0.44)
      shape = rectangle
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import sys

        freq1 = 7.5
        freq2 = 12.0

        for arg in sys.argv:
            if arg.startswith('--freq1='):
                freq1 = float(arg.split('=')[1])
            if arg.startswith('--freq2='):
                freq2 = float(arg.split('=')[1])

        frame_rate = win.getActualFrameRate()
        max_freq = frame_rate / 2

        if freq1 >= max_freq or freq2 >= max_freq:
            raise ValueError(f"Frequencies must be below {max_freq}Hz (half your frame rate of {frame_rate}Hz)")

        frames_per_half_cycle_first = int(frame_rate / (2 * freq1))
        frames_per_half_cycle_second = int(frame_rate / (2 * freq2))
        frame_count = 0
      Each Frame:
        cycle_position_first = frame_count % (frames_per_half_cycle_first * 2)
        cycle_position_second = frame_count % (frames_per_half_cycle_second * 2)

        if cycle_position_first < frames_per_half_cycle_first:
            stimuli1.opacity = 1
        else:
            stimuli1.opacity = 0

        if cycle_position_second < frames_per_half_cycle_second:
            stimuli2.opacity = 1
        else:
            stimuli2.opacity = 0

        frame_count += 1
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine Test
  LoopTerminator trials
